Assign_Tags_To_Files
/MOTION_FILE_NAMES=*.c3d
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/TAGS=MARKERLESS
;

Prompt_For_Pipeline_Parameter_Value
/PIPELINE_PARAMETER_NAME=MARKERLESS_FREQUENCY
/PROMPT=INPUT THE MARKERLESS SAMPLING FREQUENCY (Hz)
/PROMPT_SIZE=10
! /SHOW_PARAMETER_NAME=FALSE
/USE_POSSIBLE_VALUES=TRUE
/DEFAULT_VALUE=100
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! /SHOW_DATA_TYPE=FALSE
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! /SPECIFY_UNITS=FALSE
! /USE_UNITS=FALSE
! /USE_POSSIBLE_UNITS=FALSE
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;

File_Open
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/SET_PROMPT=Open MARKER C3D Files
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! /ON_FILE_NOT_FOUND=PROMPT
;

Assign_Tags_To_Files
/MOTION_FILE_NAMES=*.c3d
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/TAGS=FILES
;

Combine_Tags
/ORIGINAL_TAGS=FILES+MARKERLESS
/LOGICAL_OPERATORS=XOR
/NEW_TAG=MARKER
;

File_Rename
/EXISTING_FILE_NAME=MARKER
/NEW_FILE_NAME=
! /USE_SEARCH_REPLACE=FALSE
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/REMOVE_FILE_PATH=TRUE
! /RENAME_STATIC_CALIBRATION_FILES=TRUE
;

Set_Pipeline_Parameter_To_List_Of_Tagged_Files
/PARAMETER_NAME=MARKER_FILENAMES
/TAG_NAME=MARKER
! /GET_CURRENT_SELECTED_FILES=false
/USE_SHORT_FILENAMES=TRUE
;

For_Each
/ITERATION_PARAMETER_NAME=MARKER_CURRENT_FILE
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/ITEMS=::MARKER_FILENAMES
;

Set_Pipeline_Parameter_To_Folder_Path
/PARAMETER_NAME=FOLDER
/PARAMETER_VALUE=
/PARAMETER_VALUE_MOTION_FILE=*.cmo
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;

Select_Active_File
/FILE_NAME=::MARKER_CURRENT_FILE
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;

Downsample_Data
/OLD_FILE_NAME=::MARKER_CURRENT_FILE
/SIGNAL_TYPES=TARGET
/NEW_POINT_RATE=::MARKERLESS_FREQUENCY
/NEW_ANALOG_RATE=
;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=TARGET
/SIGNAL_FOLDER=ORIGINAL
/SIGNAL_NAMES=
/FILE_NAME=::FOLDER&::MARKER_CURRENT_FILE&.txt
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! /USE_POINT_RATE=FALSE
! /NORMALIZE_DATA=FALSE
! /NORMALIZE_POINTS=101
! /EXPORT_MEAN_AND_STD_DEV=FALSE
! /EXPORT_MEAN_AND_STD_DEV_FOR_METRIC=FALSE
! /USE_P2D_FORMAT=FALSE
! /USE_XML_FORMAT=FALSE
! /USE_JSON_FORMAT=FALSE
! /USE_SHORT_FILENAME=FALSE
! /INCLUDE_TAGS_FOR_XML=FALSE
! /EXPORT_EMPTY_SIGNALS=FALSE
! /EXPORT_WITHOUT_HEADER=FALSE
! /EXPORT_NAN=FALSE
! /USE_SCIENTIFIC_NOTATION=FALSE
;

File_Close
/FILE_NAME=::MARKER_CURRENT_FILE
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;

File_Rename
/EXISTING_FILE_NAME=MARKERLESS
/NEW_FILE_NAME=
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/REMOVE_FILE_PATH=TRUE
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;

Import_Data_From_Ascii_File
/FILE_NAME=::FOLDER&::MARKER_CURRENT_FILE&.txt
/FOLDER=
! /FILTER=txt
! /SET_PROMPT=Import Signals From ASCII file
! /BUFFER_DERIVED=TRUE
! /ANALOG_BUFFER_VALUE=0
;

End_For_Each
/ITERATION_PARAMETER_NAME=MARKER_CURRENT_FILE
;

Set_Pipeline_Parameter
/PARAMETER_NAME=LOAD_MARKERS
/PARAMETER_VALUE=::FOLDER&::MARKER_CURRENT_FILE&.txt
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! /MULTI_PASS=FALSE
;

Select_Active_File
/FILE_NAME=::MARKER_CURRENT_FILE
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;

**__Add_a_Comment__**
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;

Set_Pipeline_Parameter_To_Folder_Path
/PARAMETER_NAME=FOLDER
/PARAMETER_VALUE=
/PARAMETER_VALUE_MOTION_FILE=*.cmo
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;

Set_Pipeline_Parameter_To_List_Of_Model_Names
/PARAMETER_NAME=MODEL_NAME
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/GET_MODELS_FROM_ACTIVE_MOTION_FILES=TRUE
/USE_SHORT_FILENAMES=FALSE
;

Save_Model_Template
/CALIBRATION_FILE=::MODEL_NAME
/MODEL_TEMPLATE=::FOLDER&CurrentModel.mdh
;

Set_Pipeline_Parameter_To_List_Of_Tagged_Files
/PARAMETER_NAME=MARKERLESS_FILENAMES
/TAG_NAME=MARKERLESS
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/USE_SHORT_FILENAMES=TRUE
;

Prompt_For_Pipeline_Parameter_Value
/PIPELINE_PARAMETER_NAME=FILE_FOR_STATIC
/PROMPT=SELECT A FILE TO USE AS STATIC SOURCE
/PROMPT_SIZE=10
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/USE_POSSIBLE_VALUES=TRUE
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/POSSIBLE_VALUES=::MARKERLESS_FILENAMES
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;

Export_C3DFile
/OLD_FILE_NAME=*&::FILE_FOR_STATIC
/NEW_FILE_NAME=Static.c3d
/DESTINATION_FOLDER=::FOLDER
! /SUFFIX=_
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! /TRUNCATE_POINT_LABELS=FALSE
! /USE_ORIGINAL_START_FRAME=FALSE
/EXPORT_START_FRAME=1
/EXPORT_END_FRAME=5
! /EXPORT_PROCESSED_TARGET_DATA=FALSE
! /EXPORT_PROCESSED_ANALOG_DATA=FALSE
! /TRUNCATE_PARAMETER_SECTION=FALSE
/EXPORT_ALL_LANDMARKS=FALSE
! /EXPORT_DIGITIZING_LANDMARKS=FALSE
! /EXPORT_FUNCTIONAL_LANDMARKS=FALSE
! /EXPORT_EMPTY_TARGETS=FALSE
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! /EXPORT_OLD_EVENT_LABELS=FALSE
;

Set_Pipeline_Parameter_To_List_Of_Model_Names
/PARAMETER_NAME=MODEL_NAME
/MODEL_NAMES=*
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! /GET_MODELS_FROM_ACTIVE_MOTION_FILES=FALSE
/USE_SHORT_FILENAMES=TRUE
;

Assign_Model_File
/CALIBRATION_FILE=*&::MODEL_NAME
/MOTION_FILE_NAMES=
/REMOVE_EXISTING_ASSIGNMENTS=TRUE
;

Close_Calibration_File
/CALIBRATION_FILE=::MODEL_NAME
;

Create_Hybrid_Model
/CALIBRATION_FILE=::FOLDER&Static.c3d
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! /RANGE=ALL_FRAMES
! /SET_PROMPT=Open standing file
;

Set_Pipeline_Parameter_To_List_Of_Model_Names
/PARAMETER_NAME=::MODEL_NAME
/MODEL_NAMES=*
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/USE_SHORT_FILENAMES=TRUE
;

Apply_Model_Template
/CALIBRATION_FILE=*&::MODEL_NAME
/MODEL_TEMPLATE=::FOLDER&CurrentModel.mdh
! /SET_PROMPT=Open model file
! /VIEW_BUILDMODEL_RESULTS=2
! /MISSING_TARGET_MESSAGE=FALSE
;

Assign_Model_File
/CALIBRATION_FILE=*&::MODEL_NAME
/MOTION_FILE_NAMES=ALL_FILES
/REMOVE_EXISTING_ASSIGNMENTS=TRUE
;

